PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Calibration
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    CodeComponent setup streams
      Code Type = Py
      Before Experiment:
        import random
        import time
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo("MyMarkerStream", "Markers", 1, 0, "string", "myuidw43536")
        # next make an outlet
        outlet = StreamOutlet(info)

        print("now sending markers...")
        markernames = ["1", "2", "3"]

        # pick a sample to send an wait for a bit
        outlet.push_sample([random.choice(markernames)])
Flow
  Routine Calibration
